PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = solo project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instr
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Welcome!

        You will see 3 lists of words presented on different background colours.
        Please try to remember as many words as you can.

        At the end, you will be asked to type all the words you remember.

        Press SPACE to begin.
    KeyboardComponent key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine studyroutine
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    PolygonComponent bgRect
      fillColor [set every repeat] = $color_hex 
      lineColor [set every repeat] = $color_hex 
      shape = rectangle
      size = 2, 2 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent studyWord
      color [set every repeat] = $text_color
      letterHeight = 0.14
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      wrapWidth = 1.8
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      text [set every repeat]:
        $word
  Routine _endRoutine_
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    TextComponent thanks
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!
        You may now close the experiment window.
  Routine recallitem_
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    TextComponent maskedWord
      letterHeight = 0.07
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $masked
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    TextboxComponent responsebox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = type the word here
      pos = (0,-0.2)
      size = (0.8,0.2)
      startVal [time (s)] = 0.5
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    KeyboardComponent donekey
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator RedListLoop loopType="TrialHandler"
    conditionsFile = Library/Containers/net.whatsapp.WhatsApp/Data/red_color_csv.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'honesty', 'color_hex': '#FF0000', 'text_color': '#FFFFFF'},
      {'word': 'freedom', 'color_hex': '#FF0000', 'text_color': '#FFFFFF'},
      {'word': 'trust', 'color_hex': '#FF0000', 'text_color': '#FFFFFF'},
      {'word': 'calm', 'color_hex': '#FF0000', 'text_color': '#FFFFFF'},
      {'word': 'focus', 'color_hex': '#FF0000', 'text_color': '#FFFFFF'}]
    Routine studyroutine
  LoopTerminator RedListLoop
  LoopInitiator BlueListLoop loopType="TrialHandler"
    conditionsFile = Library/Containers/net.whatsapp.WhatsApp/Data/blue_color_csv.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'loyalty', 'color_hex': '#0000FF', 'text_color': '#FFFFFF'},
      {'word': 'respect', 'color_hex': '#0000FF', 'text_color': '#FFFFFF'},
      {'word': 'energy', 'color_hex': '#0000FF', 'text_color': '#FFFFFF'},
      {'word': 'memory', 'color_hex': '#0000FF', 'text_color': '#FFFFFF'},
      {'word': 'clarity', 'color_hex': '#0000FF', 'text_color': '#FFFFFF'}]
    Routine studyroutine
  LoopTerminator BlueListLoop
  LoopInitiator GreyListLoop loopType="TrialHandler"
    conditionsFile = Library/Containers/net.whatsapp.WhatsApp/Data/grey_color_csv.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'stone', 'color_hex': '#808080', 'text_color': '#FFFFFF'},
      {'word': 'silver', 'color_hex': '#808080', 'text_color': '#FFFFFF'},
      {'word': 'shadow', 'color_hex': '#808080', 'text_color': '#FFFFFF'},
      {'word': 'planet', 'color_hex': '#808080', 'text_color': '#FFFFFF'},
      {'word': 'winter', 'color_hex': '#808080', 'text_color': '#FFFFFF'}]
    Routine studyroutine
  LoopTerminator GreyListLoop
  LoopInitiator recallloop loopType="TrialHandler"
    conditionsFile = Library/Containers/net.whatsapp.WhatsApp/Data/recall_list.csv.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'honesty', 'masked': 'h_n_st_'},
      {'word': 'loyalty', 'masked': 'l_y_lt_'},
      {'word': 'freedom', 'masked': 'f_e_d_m'},
      {'word': 'respect', 'masked': 'r_s_e_t'},
      {'word': 'trust', 'masked': 'tr_s_'},
      {'word': 'calm', 'masked': 'c_l_'},
      {'word': 'focus', 'masked': 'f_c_s'},
      {'word': 'energy', 'masked': 'e_e_g_'},
      {'word': 'memory', 'masked': 'm_m_r_'},
      {'word': 'clarity', 'masked': 'c_a_i_y'},
      {'word': 'stone', 'masked': 's_o_e'},
      {'word': 'silver', 'masked': 's_l_e_'},
      {'word': 'shadow', 'masked': 's_a_o_'},
      {'word': 'planet', 'masked': 'p_a_e_'},
      {'word': 'winter', 'masked': 'w_n_e_'}]
    Routine recallitem_
  LoopTerminator recallloop
  Routine _endRoutine_
